<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:p1="clr-namespace:AindJustFramesSchemas;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:ReplaySubject" TypeArguments="beh:CameraOutputs">
        <rx:Name>ControllersInitialized</rx:Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TriggeredCameraController0</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
      <Expression xsi:type="rx:CreateObservable">
        <Name>CameraOutput0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput" TypeArguments="p1:CameraControllerSpinnakerCamera">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>thisCameraController</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>thisCameraController</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Camera" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\InstantitateTriggeredCameras.bonsai">
              <Camera>CameraOutput0</Camera>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>thisCameraController</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="4" Label="Source2" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TriggeredCameraController1</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
      <Expression xsi:type="rx:CreateObservable">
        <Name>CameraOutput1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput" TypeArguments="p1:CameraControllerSpinnakerCamera">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>thisCameraController</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>thisCameraController</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Camera" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\InstantitateTriggeredCameras.bonsai">
              <Camera>CameraOutput1</Camera>
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>thisCameraController</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="4" Label="Source2" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>TriggeredCamerasStreams</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ControllersInitialized</Name>
      </Expression>
      <Expression xsi:type="PropertySource" TypeArguments="beh:CreateStartCamerasPayload,beh:CameraOutputs">
        <MemberName>StartCameras</MemberName>
        <Value>None</Value>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Scan">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Accumulation,Value</Selector>
            </Expression>
            <Expression xsi:type="BitwiseOr" />
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Value" Selector="it" />
              </PropertyMappings>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="beh:CreateStartCamerasPayload,beh:CameraOutputs">
              <MemberName>StartCameras</MemberName>
              <Value>CameraOutput0 CameraOutput1</Value>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>CameraControllersActive</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraControllersActive</Name>
      </Expression>
      <Expression xsi:type="beh:Format">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Register xsi:type="beh:StartCameras" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpBehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraControllersActive</Name>
      </Expression>
      <Expression xsi:type="beh:Format">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Register xsi:type="beh:StopCameras" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpBehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="9" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="29" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>