<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:AindJustFramesSchemas;assembly=Extensions"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:p2="clr-namespace:AindJustFramesSchemas.MessageProtocol;assembly=Extensions"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>HarpBehaviorCommands</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>NotSatellite</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>IsSatellite</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SerializeToJson">
          <p1:Formatting>None</p1:Formatting>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>BehaviorBoard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindJustFramesRig" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpBehavior.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>false</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM5</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>internalPub</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>internalPub</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageBytes</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpZmqTopic</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Topic" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ZmqConnection.Pub.ConnectionString</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ConnectionString" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:Publisher">
                <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="18" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="18" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source3" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>IsSatellite</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SerializeToJson">
          <p1:Formatting>None</p1:Formatting>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>ZeroMQBehaviorBoard</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:SatelliteRig" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ZmqConnection.Sub.ConnectionString</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ConnectionString" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpZmqTopic</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Topic" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="zmq:Subscriber">
                <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Last.Buffer</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:ConvertFromMessageBytes" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpBehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>NotSatellite</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>IsSatellite</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>BehaviorBoardInitialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:MuteReplies>false</harp:MuteReplies>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateEventEnablePayload">
                <beh:EventEnable>PortDI PortDIO Camera0 Camera1</beh:EventEnable>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>NotSatellite</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>IsSatellite</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SerializeToJson">
          <p1:Formatting>None</p1:Formatting>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>MainZmqLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindJustFramesRig" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SatelliteRigs</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>satelliteRig</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EnableExperiment</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:StartPayload" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>satelliteRig</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RigName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="RigName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:BuildRegisteredMessage">
                      <p3:MessageType>Request</p3:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>satelliteRig</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ZmqConnection.Pub</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ConnectionString</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ConnectionString" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MessageProtocolZmqTopic</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Topic" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="zmq:Subscriber">
                      <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Last</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:TryParseRegisteredMessages" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Payload</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="18" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="14" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>IsSatellite</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SerializeToJson">
          <p1:Formatting>None</p1:Formatting>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>SatelliteZmqLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:SatelliteRig" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>InboundMessages</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Payload</Selector>
            </Expression>
            <Expression xsi:type="p2:MatchRegisteredPayload">
              <p2:Type xsi:type="TypeMapping" TypeArguments="p2:StartPayload" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>EnableExperiment</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>InboundMessages</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Payload</Selector>
            </Expression>
            <Expression xsi:type="p2:MatchRegisteredPayload">
              <p2:Type xsi:type="TypeMapping" TypeArguments="p2:StopPayload" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>EndExperiment</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="9" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>