<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p2="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StartCameras" DisplayName="Camera" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>TriggeredCameras</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TriggeredCameraController</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FrameRate.Value</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>FrameRate</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameRate</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraFrequencyRegister</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Address" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address xsi:nil="true" />
                <harp:PayloadType>U16</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpBehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="StartCameras" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="beh:CreateStartCamerasPayload,beh:CameraOutputs">
              <MemberName>StartCameras</MemberName>
              <Value>CameraOutput0</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SelectedCamera</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:CameraOutputs">
                <Value>CameraOutput0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>93</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:CameraOutputs">
                <Value>CameraOutput1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>95</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:CameraOutputs">
                <Value>None</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:ThrowException">
                <p1:Message>Must select one camera!</p1:Message>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CameraFrequencyRegister</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpBehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessageType">
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraFrequencyRegister</Name>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Address" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>TimestampedU8</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Seconds</Selector>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>FrameEvent</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCameraController</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Cameras</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>InstantiateCamera</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisCamera</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>TriggeredCamerasInitialized</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisCamera</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SerialNumber" Selector="SerialNumber" />
                      <Property Name="ExposureTime" Selector="Exposure" />
                      <Property Name="Gain" Selector="Gain" />
                      <Property Name="Binning" Selector="Binning" />
                      <Property Name="ColorProcessing" Selector="ColorProcessing" />
                      <Property Name="Gamma" Selector="Gamma" />
                      <Property Name="PixelFormat" Selector="PixelFormat" />
                      <Property Name="AdcBitDepth" Selector="AdcBitDepth" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisCamera</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>RegionOfInterest</Selector>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="X,Y,Width,Height" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="cv:Crop,p2:Rect">
                    <MemberName>RegionOfInterest</MemberName>
                    <Value>
                      <X>0</X>
                      <Y>0</Y>
                      <Width>0</Width>
                      <Height>0</Height>
                    </Value>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="RegionOfInterest" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:AindSpinnakerCapture">
                      <spk:Index xsi:nil="true" />
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <p1:ExposureTime>19000</p1:ExposureTime>
                      <p1:Gain>0</p1:Gain>
                      <p1:Binning>1</p1:Binning>
                      <p1:Gamma xsi:nil="true" />
                      <p1:PixelFormat>Mono8</p1:PixelFormat>
                      <p1:RegionOfInterest>
                        <p1:X>0</p1:X>
                        <p1:Y>0</p1:Y>
                        <p1:Width>0</p1:Width>
                        <p1:Height>0</p1:Height>
                      </p1:RegionOfInterest>
                      <p1:AdcBitDepth xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FrameEvent</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisCamera</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Key</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="15" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="15" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source3" />
                  <Edge From="15" To="17" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="21" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
              <rx:Name>TriggeredCamerasInitialized</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="SubscribeSubject">
              <Name>TriggeredCameraController</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Cameras</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Count</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GreaterThanOrEqual">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SelectedCamera</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ControllersInitialized</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="17" Label="Source1" />
            <Edge From="13" To="20" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="24" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="24" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source3" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="32" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="32" To="37" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="45" Label="Source1" />
            <Edge From="44" To="45" Label="Source2" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="53" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source2" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="59" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source2" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="62" Label="Source1" />
            <Edge From="61" To="62" Label="Source2" />
            <Edge From="62" To="63" Label="Source1" />
            <Edge From="63" To="64" Label="Source1" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="65" To="66" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>