<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:p3="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p5="clr-namespace:AindJustFramesSchemas.MessageProtocol;assembly=Extensions"
                 xmlns:p6="clr-namespace:;assembly=Extensions"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p7="clr-namespace:AllenNeuralDynamics.HarpUtils;assembly=AllenNeuralDynamics.HarpUtils"
                 xmlns:p8="clr-namespace:AindJustFramesSchemas;assembly=Extensions"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>Main</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ConfigurationInput</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Init</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ConfigurationInput</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ConfigurationInput</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>SubjectSchema</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateRepository">
                      <p1:Path>../.</p1:Path>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Repository</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubjectSchema</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SessionName" Selector="SessionName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DataDirectory</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="RootFolder" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai">
                    <RootFolder />
                    <SessionName xsi:nil="true" />
                    <SubjectName>LoggingRootPath</SubjectName>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>CompoundRootPath</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>message_protocol</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>MessageProtocolZmqTopic</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>harp</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>HarpZmqTopic</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>SaveRawVideo</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:SoftwareEvent">
                    <rx:Name>SoftwareEvent</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
                    <rx:Name>EndExperiment</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>IsExperimentRunning</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
                    <rx:Name>EnableExperiment</rx:Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StartLogging</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>IsExperimentRunning</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
                    <rx:Name>StartLogging</rx:Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartLogging</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>StartExperiment</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>IsExperimentRunning</Name>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>IsRepoClean</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Repository</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p1:IsRepositoryClean">
                            <p1:IgnoreUntracked>false</p1:IgnoreUntracked>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SubjectSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>AllowDirtyRepo</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>AllowDirty?</scr:Name>
                          <scr:Expression>Item2 ? False : Item1</scr:Expression>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p4:ThrowException">
                            <p4:Message>Repository is not clean! Please discard all local changes.</p4:Message>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="5" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="13" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Hardware</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpDevices.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Cameras.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpBehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:PayloadType>Timestamp</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControllersInitialized</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Count" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>ExpectedControllers</scr:Name>
                    <scr:Expression>(it.TriggeredCameraController0==null ? 0 : 1)+(it.TriggeredCameraController1==null ? 0 : 1)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="NotEqual" />
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StartExperiment</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p4:ThrowException" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:RegisteredMessages">
                    <rx:Name>OutboundMessages</rx:Name>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>NetworkCommunication</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>ZmqConnection</Selector>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ZmqConnection</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT0S</rx:DueTime>
                            <rx:Period>PT1S</rx:Period>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:HeartbeatPayload" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RigSchema</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RigName</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="RigName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:BuildRegisteredMessage">
                            <p6:MessageType>Event</p6:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>OutboundMessages</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowInput" TypeArguments="p5:RegisteredMessages">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:SerializeToJson">
                            <p5:Formatting>None</p5:Formatting>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ZmqConnection</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="ConnectionString" Selector="Sub.ConnectionString" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>MessageProtocolZmqTopic</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Topic" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="zmq:Publisher">
                            <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                            <zmq:Topic>message_protocol</zmq:Topic>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>InboundMessages</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>IsRequest</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>MessageType</Selector>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p5:MessageType">
                                  <Value>Request</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Payload</Selector>
                        </Expression>
                        <Expression xsi:type="p5:MatchRegisteredPayload">
                          <p5:Type xsi:type="TypeMapping" TypeArguments="p5:StartPayload" />
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>EnableExperiment</Name>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>Response</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>IsExperimentRunning</Name>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p5:StartPayload" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RigSchema</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>RigName</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="RigName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p6:BuildRegisteredMessage">
                                  <p6:MessageType>Reply</p6:MessageType>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="7" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>OutboundMessages</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>InboundMessages</Name>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Name>IsRequest</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>MessageType</Selector>
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="p5:MessageType">
                                  <Value>Request</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Payload</Selector>
                        </Expression>
                        <Expression xsi:type="p5:MatchRegisteredPayload">
                          <p5:Type xsi:type="TypeMapping" TypeArguments="p5:StopPayload" />
                        </Expression>
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="MulticastSubject">
                          <Name>EndExperiment</Name>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>Response</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>IsExperimentRunning</Name>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p5:StopPayload" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RigSchema</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>RigName</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="RigName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p6:BuildRegisteredMessage">
                                  <p6:MessageType>Reply</p6:MessageType>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="7" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>OutboundMessages</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ZmqConnection</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="ConnectionString" Selector="Sub.ConnectionString" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>MessageProtocolZmqTopic</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Topic" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="zmq:Subscriber">
                            <zmq:ConnectionString>tcp://localhost:5557</zmq:ConnectionString>
                            <zmq:Topic>message_protocol</zmq:Topic>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Last</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p6:TryParseRegisteredMessages" />
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>InboundMessages</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="8" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="16" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="16" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source3" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="26" To="27" Label="Source1" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="32" Label="Source1" />
                        <Edge From="32" To="33" Label="Source1" />
                        <Edge From="33" To="34" Label="Source1" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="36" To="39" Label="Source1" />
                        <Edge From="37" To="38" Label="Source1" />
                        <Edge From="38" To="39" Label="Source2" />
                        <Edge From="39" To="40" Label="Source1" />
                        <Edge From="40" To="41" Label="Source1" />
                        <Edge From="41" To="42" Label="Source1" />
                        <Edge From="42" To="43" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>InboundMessages</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="13" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraQc.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SkipHardwareValidation</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="rx:Defer">
              <Name>Logging</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:Defer">
                    <Name>Behavior</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Modality" />
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="p4:AppendModalitySuffix,sys:Nullable(p4:Modality)">
                          <MemberName>Modality</MemberName>
                          <Value>Behavior</Value>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>HarpLogging</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpBehaviorEvents</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpBehaviorGetMetadata.bonsai" />
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceMetadata" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                                <DeviceMetadata />
                                <Modality>Behavior</Modality>
                                <DeviceName>Behavior</DeviceName>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="5" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="5" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source3" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>HarpCommandsLogging</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpBehaviorEvents</Name>
                              </Expression>
                              <Expression xsi:type="harp:Parse">
                                <harp:Register xsi:type="harp:ParseMessagePayload">
                                  <harp:PayloadType>Timestamp</harp:PayloadType>
                                  <harp:IsArray>false</harp:IsArray>
                                </harp:Register>
                              </Expression>
                              <Expression xsi:type="rx:BehaviorSubject">
                                <Name>HarpSeconds</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpBehaviorCommands</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpSeconds</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p7:ModifyMessage">
                                  <p7:Address xsi:nil="true" />
                                  <p7:MessageTypeModified xsi:nil="true" />
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpBehaviorGetMetadata.bonsai" />
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DeviceMetadata" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:LogHarpDeviceWithMetadata.bonsai">
                                <DeviceMetadata />
                                <Modality>Behavior</Modality>
                                <DeviceName>HarpCommands/Behavior</DeviceName>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="5" Label="Source1" />
                              <Edge From="4" To="5" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="11" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="11" Label="Source2" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source3" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>SoftwareEvents</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>SoftwareEvent</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:ObserveOn">
                                  <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>HarpTimestampSource</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:ObserveOn">
                                  <rx:Scheduler>TaskPoolScheduler</rx:Scheduler>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="harp:CreateTimestamped" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p4:TimestampSoftwareEvent" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Modality</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Modality" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai">
                                <LoggerName>SoftwareEvents</LoggerName>
                                <SubjectName>LoggingRootPath</SubjectName>
                                <Modality xsi:nil="true" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="GroupWorkflow">
                                <Name>Metadata</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Repository</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Head</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p4:CreateSoftwareEvent">
                                        <p4:EventName>RepositoryStatus</p4:EventName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>SoftwareEvent</Name>
                                    </Expression>
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="4" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="9" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source2" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Defer">
                          <Name>Other</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>Logs</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>DeviceName</Name>
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>ConfigSchemaLogging</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>SubjectSchema</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p8:SerializeToJson">
                                        <p8:Formatting>None</p8:Formatting>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Modality</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="Modality" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>DeviceName</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="DeviceName" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                      <SubjectName>LoggingRootPath</SubjectName>
                                      <Modality xsi:nil="true" />
                                      <DeviceName>Config</DeviceName>
                                      <LogName>session_output</LogName>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>RigSchema</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p8:SerializeToJson">
                                        <p8:Formatting>None</p8:Formatting>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Modality</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="Modality" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                      <SubjectName>LoggingRootPath</SubjectName>
                                      <Modality xsi:nil="true" />
                                      <DeviceName>Config</DeviceName>
                                      <LogName>rig_output</LogName>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>RawRigSchema</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Modality</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="Modality" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>DeviceName</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="DeviceName" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                                      <SubjectName>LoggingRootPath</SubjectName>
                                      <Modality xsi:nil="true" />
                                      <DeviceName>Config</DeviceName>
                                      <LogName>rig_input</LogName>
                                      <Extension>json</Extension>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>RawSessionSchema</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Modality</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="Modality" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>DeviceName</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="DeviceName" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogAllText.bonsai">
                                      <SubjectName>LoggingRootPath</SubjectName>
                                      <Modality xsi:nil="true" />
                                      <DeviceName>Config</DeviceName>
                                      <LogName>session_input</LogName>
                                      <Extension>json</Extension>
                                    </Expression>
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="6" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="6" Label="Source2" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source3" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="11" Label="Source1" />
                                    <Edge From="9" To="10" Label="Source1" />
                                    <Edge From="10" To="11" Label="Source2" />
                                    <Edge From="12" To="17" Label="Source1" />
                                    <Edge From="13" To="14" Label="Source1" />
                                    <Edge From="14" To="17" Label="Source2" />
                                    <Edge From="15" To="16" Label="Source1" />
                                    <Edge From="16" To="17" Label="Source3" />
                                    <Edge From="18" To="23" Label="Source1" />
                                    <Edge From="19" To="20" Label="Source1" />
                                    <Edge From="20" To="23" Label="Source2" />
                                    <Edge From="21" To="22" Label="Source1" />
                                    <Edge From="22" To="23" Label="Source3" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>Logs</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>EndExperiment</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="StringProperty">
                                        <Value>ExperimentCompleted</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p4:CreateSoftwareEvent">
                                        <p4:EventName>SoftwareEvent</p4:EventName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>HarpTimestampSource</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="harp:CreateTimestamped" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p4:TimestampSoftwareEvent" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p2:SerializeToJson">
                                        <p2:Formatting>None</p2:Formatting>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Modality</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="Modality" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>DeviceName</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="DeviceName" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:LogDataSchema.bonsai">
                                      <SubjectName>LoggingRootPath</SubjectName>
                                      <Modality xsi:nil="true" />
                                      <DeviceName />
                                      <LogName>EndSession</LogName>
                                    </Expression>
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="4" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source2" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="12" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source1" />
                                    <Edge From="9" To="12" Label="Source2" />
                                    <Edge From="10" To="11" Label="Source1" />
                                    <Edge From="11" To="12" Label="Source3" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>BehaviorVideos</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Modality" />
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="p4:AppendModalitySuffix,sys:Nullable(p4:Modality)">
                          <MemberName>Modality</MemberName>
                          <Value>BehaviorVideos</Value>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Modality</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggeredCamerasStreams</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\TriggeredCamerasLogger.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                </Nodes>
                <Edges />
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualizers.bonsai" />
            <Expression xsi:type="ui:VisualizerWindow">
              <ui:Visible>true</ui:Visible>
              <ui:Location xsi:nil="true" />
              <ui:Size xsi:nil="true" />
              <ui:WindowState xsi:nil="true" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>EndRoutine</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>